# simple_system.bngl
begin model
begin parameters

	ITERATIONS  1000
    MCELL_DIFFUSION_CONSTANT_3D_A 1e-3
    MCELL_DIFFUSION_CONSTANT_3D_DNA 1e-3

    MCELL_DEFAULT_COMPARTMENT_VOLUME 1
    NA_um3 6.022e8
    VOL_RXN 1
    UNIMOL_RXN 10000
    MCELL_REDEFINE_VOL_RXN NA_um3
    
    kon1     2 * VOL_RXN
	koff1    10 * UNIMOL_RXN
	
    #kon2     1 * VOL_RXN
	koff2    1 * UNIMOL_RXN

	koff3    5 * UNIMOL_RXN
	koff4    1 * UNIMOL_RXN
	koff5    1 * UNIMOL_RXN
end parameters
begin species
	A(b,p~U) 500
    A(b,p~P) 500
    DNA() 20
end species
begin reaction rules
	A(b,p~U) + A(b,p~P)    <->  A(b!1,p~U).A(b!1,p~P)    kon1, koff1
    #A(b!1,p~U).A(b!1,p~P)   ->  0                        koff2 # mcell3r converter does not handle the '0'
    A(b!1,p~U).A(b!1,p~P)   ->  Null                        koff2
    DNA()                   ->  DNA() + A(b,p~U)         koff3
    A(b,p~U)               <->  A(b,p~P)                 koff4, koff5
end reaction rules
begin observables
    Species Ab1pUAb1pP A(b!1,p~U).A(b!1,p~P)
    Species AbpP A(b,p~P)
    Species AbpU A(b,p~U)
    Species DNA DNA
end observables
end model

generate_network({overwrite=>1})
simulate({method=>"ode",t_end=>1e-3,n_steps=>1000})


