begin model

begin parameters
	GDAT = 1
	
	#TIME_STEP  1e-6
	VACANCY_SEARCH_DISTANCE  10
	
	ITERATIONS  10
    MCELL_DIFFUSION_CONSTANT_3D_A 1e-6
    MCELL_DIFFUSION_CONSTANT_3D_B 5e-5
    MCELL_DIFFUSION_CONSTANT_3D_C 7e-5	
    
    MCELL_DEFAULT_COMPARTMENT_VOLUME 0.0625^3
end parameters
begin molecule types
	A()
	B()
	C()
end molecule types

begin seed species
	 A  10
	 B  10
end seed species

begin observables
    Molecules Amol A
    Molecules Bmol B
    Molecules Cmol C
    Species Aspec A
    Species Bspec B
    Species Cspec C
end observables

begin reaction rules
	A + B -> C 1E9
end reaction rules

end model
