# simple_system.bngl
begin model
begin parameters
    NA_um3 6.022e8
    VOL_RXN 1
    MCELL_REDEFINE_VOL_RXN NA_um3
    
	kon     10 * VOL_RXN
	koff    300
	kcat    1000
	dephos  100
	
	ITERATIONS  100
    MCELL_DIFFUSION_CONSTANT_3D_X 9e-5
    MCELL_DIFFUSION_CONSTANT_3D_Y 8e-5
    MCELL_DEFAULT_COMPARTMENT_VOLUME (1/16)^3
end parameters
begin species
	X(y,p~0,p~0)  500
	X(y,p~1,p~1)  0  
	Y(x)          50
end species
begin reaction rules
	X(p~1)             ->  X(p~0)               dephos
	X(y,p~0) + Y(x)    ->  X(y!1,p~0).Y(x!1)    kon
	# X(y!1,p~0).Y(x!1)  ->  X(y,p~0) + Y(x)    koff 
	X(y!1,p~0).Y(x!1)  ->  X(y,p~1) + Y(x)      kcat 
end reaction rules
begin observables
    Molecules X_free  X(p~0,y)
    Molecules Xp_free X(p~1,y)
    Molecules Xpp     X(p~1,p~1)
    #Molecules XY  b   X(y!1).Y(x!1)
end observables
end model

generate_network({overwrite=>1})
simulate_ode({suffix=>"ode",t_end=>100,n_steps=>100})
resetConcentrations()
simulate_ssa({suffix=>"ssa",t_end=>100,n_steps=>100})
resetConcentrations()
writeXML()

