# simple_system.bngl
begin model
begin parameters
	ITERATIONS  100
    MCELL_DIFFUSION_CONSTANT_3D_X 1e-3
    MCELL_DIFFUSION_CONSTANT_3D_Y 1e-3

    MCELL_DEFAULT_COMPARTMENT_VOLUME (1/8)^3
    NA_um3 6.022e8 * 10
    VOL_RXN 1
    UNIMOL_RXN 10000
    MCELL_REDEFINE_VOL_RXN NA_um3
    
	kon     10 * VOL_RXN
	koff    5 * UNIMOL_RXN
	kcat    0.6 * UNIMOL_RXN
	dephos  0.5 * UNIMOL_RXN
end parameters
begin species
	X(y,p~0)  500
	X(y,p~1)  0
	Y(x)      50
end species
begin reaction rules
	X(p~1)             ->  X(p~0)               dephos
	X(y,p~0) + Y(x)    ->  X(y!1,p~0).Y(x!1)    kon
	X(y!1,p~0).Y(x!1)  ->  X(y,p~0) + Y(x)      koff
	X(y!1,p~0).Y(x!1)  ->  X(y!1,p~1).Y(x!1)    kcat
end reaction rules
begin observables
    Molecules Xp X(p~1)
end observables
end model

generate_network({overwrite=>1})
simulate({method=>"ode",t_end=>1e-3,n_steps=>1000})
